<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:BonVision;assembly=BonVision" xmlns:q4="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateWindow">
          <q1:Width>640</q1:Width>
          <q1:Height>480</q1:Height>
          <q1:VSync>On</q1:VSync>
          <q1:SwapSync>false</q1:SwapSync>
          <q1:ClearColor>Black</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:CursorVisible>true</q1:CursorVisible>
          <q1:Location xsi:nil="true" />
          <q1:WindowBorder>Resizable</q1:WindowBorder>
          <q1:WindowState>Normal</q1:WindowState>
          <q1:DisplayDevice>Primary</q1:DisplayDevice>
          <q1:TargetRenderFrequency>0</q1:TargetRenderFrequency>
          <q1:RenderState />
          <q1:GraphicsMode>
            <q1:ColorFormat>
              <q1:Red>8</q1:Red>
              <q1:Green>8</q1:Green>
              <q1:Blue>8</q1:Blue>
              <q1:Alpha>8</q1:Alpha>
            </q1:ColorFormat>
            <q1:Depth>16</q1:Depth>
            <q1:Stencil>0</q1:Stencil>
            <q1:Samples>0</q1:Samples>
            <q1:AccumulatorFormat>
              <q1:Red>0</q1:Red>
              <q1:Green>0</q1:Green>
              <q1:Blue>0</q1:Blue>
              <q1:Alpha>0</q1:Alpha>
            </q1:AccumulatorFormat>
            <q1:Buffers>2</q1:Buffers>
            <q1:Stereo>false</q1:Stereo>
          </q1:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:TextureResources">
          <q1:Textures>
            <q1:TextureConfiguration xsi:type="q1:Texture2D">
              <q1:Name>DynamicVideo</q1:Name>
              <q1:Width xsi:nil="true" />
              <q1:Height xsi:nil="true" />
              <q1:InternalFormat>Rgba</q1:InternalFormat>
              <q1:WrapS>Repeat</q1:WrapS>
              <q1:WrapT>Repeat</q1:WrapT>
              <q1:MinFilter>Nearest</q1:MinFilter>
              <q1:MagFilter>Nearest</q1:MagFilter>
            </q1:TextureConfiguration>
          </q1:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateTexture">
          <q1:TextureName>DynamicVideo</q1:TextureName>
          <q1:TextureTarget>Texture2D</q1:TextureTarget>
          <q1:InternalFormat>Rgba</q1:InternalFormat>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:CreateRandom">
          <q2:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="AsyncSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli3D</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderTexture">
          <q1:RenderState />
          <q1:ClearColor>Gray</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:Width xsi:nil="true" />
          <q1:Height xsi:nil="true" />
          <q1:WrapS>Repeat</q1:WrapS>
          <q1:WrapT>Repeat</q1:WrapT>
          <q1:MinFilter>Linear</q1:MinFilter>
          <q1:MagFilter>Linear</q1:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BindTexture">
          <q1:TextureSlot>Texture0</q1:TextureSlot>
          <q1:ShaderName>TexturedModel</q1:ShaderName>
          <q1:TextureTarget>Texture2D</q1:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli3D</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:MeshResources">
          <q1:Meshes>
            <q1:MeshConfiguration xsi:type="q1:TexturedModel">
              <q1:Name>monkey</q1:Name>
              <q1:FileName>monkey.obj</q1:FileName>
            </q1:MeshConfiguration>
          </q1:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>DrawStimuli3D</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
          <TranslationX>0</TranslationX>
          <TranslationY>0</TranslationY>
          <TranslationZ>0</TranslationZ>
          <RotationZ>0</RotationZ>
          <RotationY>0</RotationY>
          <RotationX>0</RotationX>
          <ScaleX>1</ScaleX>
          <ScaleY>1</ScaleY>
          <ScaleZ>1</ScaleZ>
          <MeshName>monkey</MeshName>
          <Ambient>
            <X>0.2</X>
            <Y>0.2</Y>
            <Z>0.2</Z>
          </Ambient>
          <Diffuse>
            <X>0.8</X>
            <Y>0.8</Y>
            <Z>0.8</Z>
          </Diffuse>
          <Specular>
            <X>0.8</X>
            <Y>0.8</Y>
            <Z>0.8</Z>
          </Specular>
          <SpecularExponent>10</SpecularExponent>
        </Builder>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.PrimitiveResources.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedViewport.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
        <Angle>0</Angle>
        <TextureName>DynamicVideo</TextureName>
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <ShiftX>0</ShiftX>
        <ShiftY>0</ShiftY>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SparseNoise</Name>
        <Description>Generates and draws a non-overlapping discrete sparse grid of randomly activated quads.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q3:ConvertFromArray">
                <q3:Size>
                  <q3:Width>10</q3:Width>
                  <q3:Height>10</q3:Height>
                </q3:Size>
                <q3:Depth xsi:nil="true" />
                <q3:Channels xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertySourceOfConvertFromArraySize">
              <MemberName>Size</MemberName>
              <Value>
                <Width>10</Width>
                <Height>10</Height>
              </Value>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Size" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Timer">
                <q1:DueTime>PT0S</q1:DueTime>
                <q1:Period>PT0.2S</q1:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Period</MemberName>
              <Name>Duration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>ActiveQuads</MemberName>
              <Name>ActiveQuads</Name>
            </Expression>
            <Expression xsi:type="PropertySourceOfConvertFromArraySize">
              <MemberName>Size</MemberName>
              <Value>
                <Width>10</Width>
                <Height>10</Height>
              </Value>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>GridSize</Name>
              <Description>The size of the sparse noise grid.</Description>
              <Category />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Rows" Selector="Height" />
                <Property Name="Columns" Selector="Width" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:ConvertToImage" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q5:CreateSparseNoiseGrid">
                <q5:Rows>10</q5:Rows>
                <q5:Columns>10</q5:Columns>
                <q5:ActiveQuads>5</q5:ActiveQuads>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="12" Label="Source2" />
            <Edge From="1" To="11" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="1" Label="Source2" />
            <Edge From="4" To="12" Label="Source1" />
            <Edge From="5" To="4" Label="Source1" />
            <Edge From="6" To="12" Label="Source3" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="2" Label="Source1" />
            <Edge From="8" To="7" Label="Source1" />
            <Edge From="9" To="12" Label="Source4" />
            <Edge From="11" To="10" Label="Source1" />
            <Edge From="12" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>0</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <MeshName>Plane</MeshName>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveViewport.bonsai">
        <Eye>
          <X>1</X>
          <Y>1</Y>
          <Z>2</Z>
        </Eye>
        <Target>
          <X>-0</X>
          <Y>-0</Y>
          <Z>-1</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
        <FieldOfView>90</FieldOfView>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="14" Label="Source1" />
      <Edge From="2" To="15" Label="Source1" />
      <Edge From="3" To="11" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="18" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="19" Label="Source1" />
      <Edge From="11" To="1" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="3" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="8" Label="Source1" />
      <Edge From="17" To="4" Label="Source1" />
      <Edge From="19" To="10" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.CreateWindow, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.LoadResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.TextureResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateTexture, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.CreateRandom, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AsyncSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderTexture, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.BindTexture, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.MeshResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Dsp.ConvertFromArray, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.PropertySource`2[[Bonsai.Dsp.ConvertFromArray, Bonsai.Dsp, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null],[OpenCV.Net.Size, OpenCV.Net, Version=3.3.0.0, Culture=neutral, PublicKeyToken=null]], Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Timer, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertToImage, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>BonVision.CreateSparseNoiseGrid, BonVision, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>