<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value>StartSession</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q2:CreateRandom">
            <q2:Seed xsi:nil="true" />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="AsyncSubject">
          <Name>Random</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="Take">
            <Count>1</Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EventLogging</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="BehaviorSubject">
                <Name>Events</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Events</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="Timestamp" />
              </Expression>
              <Expression xsi:type="q3:CsvWriter">
                <q3:FileName>Events.csv</q3:FileName>
                <q3:Delimiter>,</q3:Delimiter>
                <q3:Append>false</q3:Append>
                <q3:Overwrite>true</q3:Overwrite>
                <q3:Suffix>None</q3:Suffix>
                <q3:IncludeHeader>true</q3:IncludeHeader>
                <q3:Selector />
              </Expression>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="ExternalizedProperty">
                <MemberName>FileName</MemberName>
                <Name>FileName</Name>
              </Expression>
              <Expression xsi:type="ExternalizedProperty">
                <MemberName>Overwrite</MemberName>
                <Name>Overwrite</Name>
              </Expression>
            </Nodes>
            <Edges>
              <Edge>
                <From>1</From>
                <To>2</To>
                <Label>Source1</Label>
              </Edge>
              <Edge>
                <From>2</From>
                <To>3</To>
                <Label>Source1</Label>
              </Edge>
              <Edge>
                <From>4</From>
                <To>0</To>
                <Label>Source1</Label>
              </Edge>
              <Edge>
                <From>5</From>
                <To>3</To>
                <Label>Source2</Label>
              </Edge>
              <Edge>
                <From>6</From>
                <To>3</To>
                <Label>Source3</Label>
              </Edge>
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="RigInfo\NormalizedViewport.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <Radius>1</Radius>
        <Edge>0.2</Edge>
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>0.813953459</LocationX>
        <LocationY>0</LocationY>
        <Opacity>1</Opacity>
        <SpatialFrequency>10</SpatialFrequency>
        <SquareWave>false</SquareWave>
        <Contrast>1</Contrast>
        <TemporalFrequency>0</TemporalFrequency>
        <Angle>0</Angle>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.CreateRandom, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AsyncSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>