<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateWindow">
          <q1:Width>640</q1:Width>
          <q1:Height>480</q1:Height>
          <q1:VSync>On</q1:VSync>
          <q1:SwapSync>false</q1:SwapSync>
          <q1:ClearColor>Gray</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:CursorVisible>true</q1:CursorVisible>
          <q1:Location xsi:nil="true" />
          <q1:WindowBorder>Resizable</q1:WindowBorder>
          <q1:WindowState>Normal</q1:WindowState>
          <q1:DisplayDevice>Primary</q1:DisplayDevice>
          <q1:TargetRenderFrequency>0</q1:TargetRenderFrequency>
          <q1:RenderState />
          <q1:GraphicsMode>
            <q1:ColorFormat>
              <q1:Red>8</q1:Red>
              <q1:Green>8</q1:Green>
              <q1:Blue>8</q1:Blue>
              <q1:Alpha>8</q1:Alpha>
            </q1:ColorFormat>
            <q1:Depth>16</q1:Depth>
            <q1:Stencil>0</q1:Stencil>
            <q1:Samples>0</q1:Samples>
            <q1:AccumulatorFormat>
              <q1:Red>0</q1:Red>
              <q1:Green>0</q1:Green>
              <q1:Blue>0</q1:Blue>
              <q1:Alpha>0</q1:Alpha>
            </q1:AccumulatorFormat>
            <q1:Buffers>2</q1:Buffers>
            <q1:Stereo>false</q1:Stereo>
          </q1:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.PrimitiveResources.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedViewport.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <RangeMin>-1</RangeMin>
        <RangeMax>1</RangeMax>
        <Count>5</Count>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>CreateGratings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="LocationX" Selector="Item2.Item1" />
                <Property Name="Contrast" Selector="Item2.Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <ExtentX>0.3</ExtentX>
              <ExtentY>0.3</ExtentY>
              <LocationX>1</LocationX>
              <LocationY>0</LocationY>
              <Angle>0</Angle>
              <SpatialFrequency>10</SpatialFrequency>
              <TemporalFrequency>0</TemporalFrequency>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <Radius>1</Radius>
              <Edge>0.2</Edge>
              <Opacity>1</Opacity>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <RangeMin>0.1</RangeMin>
        <RangeMax>1</RangeMax>
        <Count>5</Count>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="1" Label="Source1" />
      <Edge From="6" To="3" Label="Source1" />
      <Edge From="7" To="4" Label="Source1" />
      <Edge From="9" To="4" Label="Source2" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.CreateWindow, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.LoadResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>